PsychoPy2experiment version="1.82.01"
Settings
  Show mouse = True
  Data filename = 'data/%s_%s_%s' %(expInfo['Subject_ID'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'Session_Number': u'', u'Memory_Set_Size': u'5', u'length_of_bar_px': u'60', u'Subject_ID': u'', u'width_of_bar_px': u'10', u'length_of_display_time_ms': u'500', u'length_of_pause_time_ms': u'500'}
  expName = Short Term Memory Simutaneous Presentation
  logging level = data
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine trialresult
    CodeComponent code_3
      Begin Routine:
        #--Assigns which message should be on the resulr screen
        if not key_press.keys:
            msg='Too Late !!'
        elif key_press.corr:#stored on last run routine
            msg='Correct'
        else:
            msg='Incorrect'
      End Routine:
        #-- Following lines of code assign the line position for the next trail
        chosenLocs = random.sample(possibleLocs, memSize+5)
        shuffle(chosenLocs)

        pos = []
        x_cords=[]
        y_cords=[]
        ind = 0

        for i in range(memSize):
            x_cords.append((int(chosenLocs[i]%noOfCols)*barLen+int(barLen/2))-int(colSize/2))
            y_cords.append((int(chosenLocs[i]/noOfCols)*barLen+int(barLen/2))-int(rowSize/2))
            ind=ind+1

        if memSize < 5 :
            for i in range(5+1-memSize):
                x_cords.append((int(chosenLocs[ind]%noOfCols)*barLen+int(barLen/2))-int(colSize/2))
                y_cords.append((int(chosenLocs[ind]/noOfCols)*barLen+int(barLen/2))-int(rowSize/2))
                ind=ind+1

        pos = []
        for i in range(len(x_cords)):
            pos.append([x_cords[i],y_cords[i]])

        shuffle(pos)

        #-- Assigning the line position for the next trail complete.
    TextComponent resultMsg
      color = Black
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine nextTrial
    TextComponent contMsg
      color = Black
      startVal [time (s)] = $trials.thisN < max
      letterHeight = 0.06
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      text:
        We will do one more category.
        Press any key when ready
    TextComponent exitMsg
      color = Black
      startVal [time (s)] = $trials.thisN == max-1
      letterHeight = 0.07
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      text:
        Thank you !!
        You have completed the Experiment.
        Press any key to exit.
    KeyboardComponent contKeyPress
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trialtest
    TextComponent trialTestMsg
      text = Test Number :
      stopVal [duration (s)] = 2
      pos = [-0.8, 0.85]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    TextComponent trialTestNum
      text [set every repeat] = $trials.thisN+1
      stopVal [duration (s)] = 2
      pos = [-0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    TextComponent inputmsg
      color = black
      stopVal [duration (s)] = 2
      pos = [0, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Press 's' if they are same.
        Press 'd' if they are not same.
    PolygonComponent testcluster
      fillColor = $[0,0,0]
      stopVal [duration (s)] = 2
      lineWidth = 4
      units = pix
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      size = stmArea
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    PolygonComponent testline1
      opacity = memSize >= 1
      fillColor [set every repeat] = $tcol1
      stopVal [duration (s)] = 2.0
      pos [set every repeat] = [pos[0]]
      lineWidth = barWidth
      units = pix
      lineColor [set every repeat] = $tcol1
      ori [set every repeat] = $tort1
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [barLen]
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    PolygonComponent testline2
      opacity = memSize >= 2
      fillColor [set every repeat] = $tcol2
      stopVal [duration (s)] = 2.0
      pos [set every repeat] = [pos[1]]
      lineWidth = barWidth
      units = pix
      lineColor [set every repeat] = $tcol2
      ori [set every repeat] = $tort2
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [barLen]
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    PolygonComponent testline3
      opacity = memSize >= 3
      fillColor [set every repeat] = $tcol3
      stopVal [duration (s)] = 2.0
      pos [set every repeat] = [pos[2]]
      lineWidth = barWidth
      units = pix
      lineColor [set every repeat] = $tcol3
      ori [set every repeat] = $tort3
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [barLen]
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    PolygonComponent testline4
      opacity = memSize >= 4
      fillColor [set every repeat] = $tcol4
      stopVal [duration (s)] = 2.0
      pos [set every repeat] = [pos[3]]
      lineWidth = barWidth
      units = pix
      lineColor [set every repeat] = $tcol4
      ori [set every repeat] = $tort4
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [barLen]
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    PolygonComponent testline5
      opacity = memSize >= 5
      fillColor [set every repeat] = $tcol5
      stopVal [duration (s)] = 2.0
      pos [set every repeat] = [pos[4]]
      lineWidth = barWidth
      units = pix
      lineColor [set every repeat] = $tcol5
      ori [set every repeat] = $tort5
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [barLen]
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    KeyboardComponent key_press
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 2.0
      forceEndRoutine = True
      allowedKeys = 's','d'
      startVal [time (s)] = 0.0
      store = first key
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  Routine midpause
    StaticComponent ISI_4
      stopVal [duration (s)] = $pauseTime/1000
      startVal [time (s)] = 0.0
  Routine blankSpace
    StaticComponent ISI_2
      stopVal [duration (s)] = 0.250
      startVal [time (s)] = 0.0
  Routine instructPage
    TextComponent topLeft
      pos = [-0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Exp Information:
        1) Exp Name : Categorization
    TextComponent topRight
      stopVal [duration (s)] = 0.0
      pos = [0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        More Information:
        1) Info Line 1
        2) Info Line 2
    TextComponent instructions
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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      text:
        In this experiment, you will briefly see a screen of
        colored, oriented lines. After a blank screen, you
        will be shown a second screen of colored, oriented
        lines. Your job is to say whether the two screens
        are the same or different. Press the ‘s” key if
        they are the same, and the “d” key if they are different
    TextComponent getContinue
      text = Press any key to begin your session
      pos = [0, -0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.09
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    KeyboardComponent contInput
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = first key
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  Routine trial
    CodeComponent probStCode
      Begin Experiment:
        #--import the required packages.
        from openpyxl import load_workbook
        import random

        colSize = 800 #--MAX number of pixels along x axis
        rowSize = 500 #--MAX number of pixels along y_axis
        stmArea = [colSize, rowSize] #--Initializes the size of the rectangle in which the lines will be shown
        subID = expInfo['Subject_ID'] #--Gets Subject ID
        sessionNum = expInfo['Session_Number'] #--Gets Sessions Number
        memSize = int(expInfo['Memory_Set_Size']) #--Gets Memory Set Size
        barLen = int(expInfo['length_of_bar_px']) #--Gets length of the bar in Pixels
        barWidth = int(expInfo['width_of_bar_px']) #--Gets Width of the bar in Pixels
        dispTime = float(expInfo['length_of_display_time_ms']) #--Gets length of Display time in seconds.
        pauseTime = float(expInfo['length_of_pause_time_ms']) #--Gets Length of Pause time in seconds.

        noOfRows = int(rowSize*0.9/barLen) #-- Initialize Max number of Rows
        noOfCols = int(colSize*0.9/barLen) #-- Initialize Max number of Columns

        #--This part selects the test case number in which one of the lines should change.
        maxRep = memSize*12 #-- Initializes Max Number of Repetitions
        temp = range(maxRep) #-- Initializes Max index Numbers of Trials that can be changed
        chngList = random.sample(temp, int(maxRep/2)) #-- Initializes which trails numbers chould have the change of line.

        #--This part selects the locations for the lines
        noOfLocs = noOfRows*noOfCols #-- Initializes Max Number of Possible locations
        possibleLocs = range(noOfLocs) #-- Initializes position of all posible indexes.
        chosenLocs = random.sample(possibleLocs, memSize+5) #--Initializes the indexes of the positions chosen to place the line(s) at.
        shuffle(chosenLocs) #--Shuffles line locations.

        #--The following lines create the exact (x,y) positions at which the lines are to positioned.
        x_cords=[] #--This gives the x-coordinates
        y_cords=[] #--This gives the y-coordinates
        pos = [] #--This will give the positions in the term of (X,Y).

        #-- The following lines of code will assign the (X,Y) coordinates.
        ind=0 #-- Ind helps insure that we do not repeat location indexes while assigning X and Y coordinats below.
        for i in range(memSize):
            x_cords.append((int(chosenLocs[i]%noOfCols)*barLen+int(barLen/2))-int(colSize/2)) #--Assigning X-coordinates for given number of lines
            y_cords.append((int(chosenLocs[i]/noOfCols)*barLen+int(barLen/2))-int(rowSize/2)) #--Assigning Y-coordinates for given number of lines
            ind=ind+1

        #--Not adding the below buffers causes error in the lines created using buider.
        if memSize < 5 :
            for i in range(5-memSize):
                x_cords.append((int(chosenLocs[ind]%noOfCols)*barLen+int(barLen/2))-int(colSize/2)) #--Assigning X-coordinates for buffer positions
                y_cords.append((int(chosenLocs[ind]/noOfCols)*barLen+int(barLen/2))-int(rowSize/2)) #--Assigning Y-coordinates for buffer positions
                ind=ind+1

        #--Initializes the positions for each line.
        pos = []
        for i in range(len(x_cords)):
            pos.append([x_cords[i],y_cords[i]])

        #--This part creates the randomization of the property value assignment.
        shuffle(pos)

        #wb = load_workbook(filename = 'stimuliList.xlsx')
        #ws = wb.get_sheet_by_name("Sheet1")
        #
        #ws.cell(row=0,column=0).value = 'ort1'
        #ws.cell(row=0,column=1).value = 'col1'
        #ws.cell(row=0,column=2).value = 'ort2'
        #ws.cell(row=0,column=3).value = 'col2'
        #ws.cell(row=0,column=4).value = 'ort3'
        #ws.cell(row=0,column=5).value = 'col3'
        #ws.cell(row=0,column=6).value = 'ort4'
        #ws.cell(row=0,column=7).value = 'col4'
        #ws.cell(row=0,column=8).value = 'ort5'
        #ws.cell(row=0,column=9).value = 'col5'
        #ws.cell(row=0,column=10).value = 'tort1'
        #ws.cell(row=0,column=11).value = 'tcol1'
        #ws.cell(row=0,column=12).value = 'tort2'
        #ws.cell(row=0,column=13).value = 'tcol2'
        #ws.cell(row=0,column=14).value = 'tort3'
        #ws.cell(row=0,column=15).value = 'tcol3'
        #ws.cell(row=0,column=16).value = 'tort4'
        #ws.cell(row=0,column=17).value = 'tcol4'
        #ws.cell(row=0,column=18).value = 'tort5'
        #ws.cell(row=0,column=19).value = 'tcol5'
        #ws.cell(row=0,column=20).value = 'changed'
        #ws.cell(row=0,column=21).value = 'corrAns'
        #ws.cell(row=0,column=22).value = 'lineChanged'
        #
        #wb.save('stimuliList.xlsx')

        for r in range(maxRep):
            fcolor = ['red', 'blue', 'purple', 'yellow', 'green', 'black', 'white'] #--Standard color Values.
            orientations = [0, 90, 45, -45] #--Standard orientation Values.

            #--This part randomizes the property values.
            shuffle(fcolor)
            shuffle(orientations)
            orientations.append(random.choice(orientations))

            #--Here we right the stimuli property values to 'stimuliList.xlsx'
            #--This excel file will be used as input during testing.
            st = 0
            while st<5:
                wb = load_workbook(filename = 'stimuliList.xlsx')
                ws = wb.get_sheet_by_name("Sheet1")

                OO = orientations[st-1]
                CC = fcolor.pop()
                ind = st*2

                ws.cell(row=r+1,column=ind).value = OO #--Write orientation values to excel file
                ws.cell(row=r+1,column=ind+1).value = CC  #--Write color values to excel file

                ws.cell(row=r+1,column=ind+10).value = OO #--Write orientation values to excel file
                ws.cell(row=r+1,column=ind+1+10).value = CC #--Write color values to excel file

                ws.cell(row=r+1,column=20).value = 'No' #--Write changed or not to excel file
                ws.cell(row=r+1,column=21).value = 's' #--Write correct key press values to excel file
                ws.cell(row=r+1,column=22).value = '-'#--No line is changed
                wb.save('stimuliList.xlsx')
                st = st+1
            #--Following lines of code assign values for the changed trails
            #--Particularly this assigns the changed line color and
            #--the corresponding line number is written to excel file along with the corresponding key press for this trial.
            if chngList.count(r) == 1:
                stmCh = random.choice(range(5))
                stmCh = (stmCh*2)+1
                colCh = random.choice(fcolor)
                wb = load_workbook(filename = 'stimuliList.xlsx')
                ws = wb.get_sheet_by_name("Sheet1")
                ws.cell(row=r+1,column=stmCh+10).value = colCh #--Write changed color values to excel file
                ws.cell(row=r+1,column=20).value = 'Yes' #--Indicates that a liine in the trail was chaged by writing Yes to the excel file.
                ws.cell(row=r+1,column=21).value = 'd' #--Writes the corresponding correct key press to the excel file.
                ws.cell(row=r+1,column=22).value = stmCh #writes which line was changed to the excel file.
                wb.save('stimuliList.xlsx')
    TextComponent trialmsg
      text = Test Number :
      stopVal [duration (s)] = $dispTime/1000
      pos = [-0.8, 0.85]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    TextComponent trialNum
      text [set every repeat] = $trials.thisN+1
      stopVal [duration (s)] = $dispTime/1000
      pos = [-0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    PolygonComponent lineCluster
      fillColor = $[0,0,0]
      stopVal [duration (s)] = $dispTime/1000
      lineWidth = 4
      units = pix
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      size = stmArea
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    PolygonComponent line1
      opacity = memSize >= 1
      fillColor [set every repeat] = $col1
      stopVal [duration (s)] = $dispTime/1000
      pos [set every repeat] = [pos[0]]
      lineWidth = barWidth
      units = pix
      lineColor [set every repeat] = $col1
      ori [set every repeat] = $ort1
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [barLen]
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    PolygonComponent line2
      opacity = memSize >= 2
      fillColor [set every repeat] = $col2
      stopVal [duration (s)] = $dispTime/1000
      pos [set every repeat] = [pos[1]]
      lineWidth = barWidth
      units = pix
      lineColor [set every repeat] = $col2
      ori [set every repeat] = $ort2
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [barLen]
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    PolygonComponent line3
      opacity = memSize >= 3
      fillColor [set every repeat] = $col3
      stopVal [duration (s)] = $dispTime/1000
      pos [set every repeat] = [pos[2]]
      lineWidth = barWidth
      units = pix
      lineColor [set every repeat] = $col3
      ori [set every repeat] = $ort3
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [barLen]
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    PolygonComponent line4
      opacity = memSize >= 4
      fillColor [set every repeat] = $col4
      stopVal [duration (s)] = $dispTime/1000
      pos [set every repeat] = [pos[3]]
      lineWidth = barWidth
      units = pix
      lineColor [set every repeat] = $col4
      ori [set every repeat] = $ort4
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [barLen]
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    PolygonComponent line5
      opacity = memSize >= 5
      fillColor [set every repeat] = $col5
      stopVal [duration (s)] = $dispTime/1000
      pos [set every frame] = [pos[4]]
      lineWidth = barWidth
      units = pix
      lineColor [set every repeat] = $col5
      ori [set every repeat] = $ort5
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [barLen]
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  Routine startpause
    TextComponent startreq
      color = black
      text = Press any key to start the next trial
      startVal [condition] = $trials.thisN < maxRep - 1
      letterHeight = 0.1
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    TextComponent endmsg
      color = black
      startVal [condition] = $trials.thisN == maxRep-1
      letterHeight = 0.1
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      text:
        You’re done!
        Press any key to exit
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [condition] = $trials.thisN < maxRep
      store = nothing
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  Routine trialtest_2
  Routine startNextTrial
    TextComponent contTrialMsg
      text = Press any key to continue.
      startVal [condition] = $trials.thisN>0
      letterHeight = 0.1
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    KeyboardComponent contTrialResp
      forceEndRoutine = True
      startVal [time (s)] = $trials.thisN>0
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Flow
  Routine instructPage
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuliList.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'changed': u'No', u'corrAns': u's', u'ort5': 90, u'ort4': 0, u'ort3': 45, u'ort2': -45, u'ort1': 90, u'tcol3': u'white', u'tcol2': u'blue', u'tcol1': u'red', u'tcol5': u'black', u'tcol4': u'green', u'col4': u'green', u'col5': u'black', u'col2': u'blue', u'col3': u'white', u'col1': u'red', u'lineChanged': u'-', u'tort2': -45, u'tort3': 45, u'tort1': 90, u'tort4': 0, u'tort5': 90},
      {u'changed': u'Yes', u'corrAns': u'd', u'ort5': -45, u'ort4': 45, u'ort3': 90, u'ort2': 0, u'ort1': 0, u'tcol3': u'red', u'tcol2': u'purple', u'tcol1': u'yellow', u'tcol5': u'white', u'tcol4': u'green', u'col4': u'green', u'col5': u'white', u'col2': u'purple', u'col3': u'red', u'col1': u'black', u'lineChanged': 1, u'tort2': 0, u'tort3': 90, u'tort1': 0, u'tort4': 45, u'tort5': -45},
      {u'changed': u'Yes', u'corrAns': u'd', u'ort5': -45, u'ort4': 45, u'ort3': 0, u'ort2': 90, u'ort1': -45, u'tcol3': u'red', u'tcol2': u'blue', u'tcol1': u'black', u'tcol5': u'yellow', u'tcol4': u'white', u'col4': u'white', u'col5': u'yellow', u'col2': u'blue', u'col3': u'red', u'col1': u'purple', u'lineChanged': 1, u'tort2': 90, u'tort3': 0, u'tort1': -45, u'tort4': 45, u'tort5': -45},
      {u'changed': u'Yes', u'corrAns': u'd', u'ort5': 90, u'ort4': 0, u'ort3': -45, u'ort2': 45, u'ort1': -45, u'tcol3': u'blue', u'tcol2': u'purple', u'tcol1': u'red', u'tcol5': u'yellow', u'tcol4': u'black', u'col4': u'black', u'col5': u'yellow', u'col2': u'white', u'col3': u'blue', u'col1': u'red', u'lineChanged': 3, u'tort2': 45, u'tort3': -45, u'tort1': -45, u'tort4': 0, u'tort5': 90}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
    Routine trial
    Routine midpause
    Routine trialtest
    Routine trialresult
    Routine startpause
  LoopTerminator trials
