PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'participant': u'1', u'Blank Delay (ms)': u'500', u'Bar Length (px)': u'60', u'Test Display (ms)': u'500', u'Set Size': u'4', u'session': u'1', u'Bar Width (px)': u'10', u'Sample Display (ms)': u'500'}
  expName = STM
  Units = use prefs
  Screen = 1
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Routines
  Routine R_sample
    CodeComponent code_sample
      Begin Routine:
        trialNum = trialNum + 1
        print 'trialNum='+str(trialNum)

        # Position of the barsbarPos= []
        cids = random.sample( range( nCols ), setSize )
        #cids = range(5)
        rids = random.sample( range( nRows ), setSize )
        #rids = range(5)
        for i in range( setSize ):
            x = int( cids[i]*barLen + barLen/2. - colSize/2. + colPad/2. )
            y = int( rids[i]*barLen + barLen/2. - rowSize/2. + rowPad/2. )
            barPosition[i] = [ x, y ]

        print 'barPosition in r_sample' #, barPosition
    PolygonComponent polygon_sRec
      opacity = setSize>=1
      fillColor = $[0, 0, 0]
      stopVal [duration (s)] = $sampleDisp/1000
      lineWidth = 4
      units = pix
      lineColor = $[-1, -1, -1]
      startVal [time (s)] = 0.0
      size = rectSize
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    PolygonComponent sElement_1
      opacity = setSize>=1
      fillColor [set every repeat] = $sCol1
      stopVal [duration (s)] = $sampleDisp/1000
      pos [set every repeat] = barPosition[0]
      lineWidth = barWidth
      units = pix
      lineColor [set every repeat] = $sCol1
      ori [set every repeat] = sOri1
      startVal [time (s)] = 0
      nVertices = 2
      size = [barLen]
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    PolygonComponent sElement_2
      opacity = setSize>=2
      fillColor [set every repeat] = $sCol2
      stopVal [duration (s)] = $sampleDisp/1000
      pos [set every repeat] = barPosition[1]
      lineWidth = barWidth
      units = pix
      lineColor [set every repeat] = $sCol2
      ori [set every repeat] = sOri2
      startVal [time (s)] = 0
      nVertices = 2
      size = [barLen]
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    PolygonComponent sElement_3
      opacity = setSize>=3
      fillColor [set every repeat] = $sCol3
      stopVal [duration (s)] = $sampleDisp/1000
      pos [set every repeat] = barPosition[2]
      lineWidth = barWidth
      units = pix
      lineColor [set every repeat] = $sCol3
      ori [set every repeat] = sOri3
      startVal [time (s)] = 0
      nVertices = 2
      size = [barLen]
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    PolygonComponent sElement_4
      opacity = setSize>=4
      fillColor [set every repeat] = $sCol4
      stopVal [duration (s)] = $sampleDisp/1000
      pos [set every repeat] = barPosition[3]
      lineWidth = barWidth
      units = pix
      lineColor [set every repeat] = $sCol4
      ori [set every repeat] = sOri4
      startVal [time (s)] = 0
      nVertices = 2
      size = [barLen]
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    PolygonComponent sElement_5
      opacity = setSize>=5
      fillColor [set every repeat] = $sCol5
      stopVal [duration (s)] = $sampleDisp/1000
      pos [set every repeat] = barPosition[4]
      lineWidth = barWidth
      units = pix
      lineColor [set every repeat] = $sCol5
      ori [set every repeat] = sOri5
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [barLen]
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  Routine R_pause
    TextComponent text_next
      text [set every repeat] = $str(trialNum)+' out of '+str(totalNum)+' done.\nPress Spacebar to go on to the next trial.'
      startVal [condition] = $trialNum<totalNum
      letterHeight = 0.1
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    KeyboardComponent key_next
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space'
      startVal [condition] = $trialNum<totalNum
      store = nothing
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    TextComponent text_last
      startVal [condition] = $trialNum==totalNum
      letterHeight = 0.1
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      text:
        You’re done!
        Press Spacebar to exit.
    KeyboardComponent key_last
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [condition] = $trialNum==totalNum
      store = nothing
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  Routine R_feedback
    CodeComponent code_feedback
      Begin Routine:
        if key_response.corr:
            feedbackMsg = 'Correct'
        else:
            feedbackMsg = 'Incorrect'


        #print 'trials.thisN='+str(trials.thisN) <---
        #print 'trials.thisRepN='+str(trials.thisRepN)
        #print 'trials.thisTrialN='+str(trials.thisTrialN)
    TextComponent text_feedback
      text [set every repeat] = $feedbackMsg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine R_response
    TextComponent text_response
      text = S or D?
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_response
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 's','d'
      startVal [time (s)] = 0.0
      store = first key
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  Routine R_test
    PolygonComponent polygon_tRect
      fillColor = $[0, 0, 0]
      stopVal [duration (s)] = $testDisp/1000
      lineWidth = 4
      units = pix
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      size = rectSize
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    PolygonComponent tElement_1
      opacity = setSize>=1
      fillColor [set every repeat] = $tCol1
      stopVal [duration (s)] = $testDisp/1000
      pos [set every repeat] = barPosition[0]
      lineWidth = barWidth
      units = pix
      lineColor [set every repeat] = $tCol1
      ori [set every repeat] = tOri1
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [barLen]
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    PolygonComponent tElement_2
      opacity = setSize>=2
      fillColor [set every repeat] = $tCol2
      stopVal [duration (s)] = $testDisp/1000
      pos [set every repeat] = barPosition[1]
      lineWidth = barWidth
      units = pix
      lineColor [set every repeat] = $tCol2
      ori [set every repeat] = sOri2
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [barLen]
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    PolygonComponent tElement_3
      opacity = setSize>=3
      fillColor [set every repeat] = $tCol3
      stopVal [duration (s)] = $testDisp/1000
      pos [set every repeat] = barPosition[2]
      lineWidth = barWidth
      units = pix
      lineColor [set every repeat] = $tCol3
      ori [set every repeat] = sOri3
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [barLen]
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    PolygonComponent tElement_4
      opacity = setSize>=4
      fillColor [set every repeat] = $tCol4
      stopVal [duration (s)] = $testDisp/1000
      pos [set every repeat] = barPosition[3]
      lineWidth = barWidth
      units = pix
      lineColor [set every repeat] = $tCol4
      ori [set every repeat] = sOri4
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [barLen]
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    PolygonComponent tElement_5
      opacity = setSize>=5
      fillColor [set every repeat] = $tCol5
      stopVal [duration (s)] = $testDisp/1000
      pos [set every repeat] = barPosition[4]
      lineWidth = barWidth
      units = pix
      lineColor [set every repeat] = $tCol5
      ori [set every repeat] = sOri5
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [barLen]
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  Routine R_instruction
    TextComponent text_inst
      startVal [time (s)] = 0.0
      letterHeight = 0.09
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      text:
        Short term memory: Same-different task

        Each trial contains two consecutive displays with a brief interval between them.
           Press S if the two displays are exactly the same.
           Press D if the two displays differ.

        Press Spacebar to start.
    KeyboardComponent key_start
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_inst
      Begin Experiment:
        import random
        from openpyxl import load_workbook


        # Pre-process

        # Read the input of variables
        blankDelay = float( expInfo['Blank Delay (ms)'] )
        sampleDisp = float( expInfo['Sample Display (ms)'] )
        testDisp = float( expInfo['Test Display (ms)'] )

        subjID = int( expInfo['participant'] )
        sessionNum = int( expInfo[ 'session' ] )
        setSize = int( expInfo[ 'Set Size' ] )
        print 'setSize=', setSize

        barLen = int( expInfo['Bar Length (px)'] )
        barWidth = int( expInfo['Bar Width (px)'] )


        # Trial number information
        nCondition = 6
        nRepetition = nCondition*2 # should be an even number!
        totalNum = nRepetition * setSize
        trialNum = 0 # initialize
        lastTag = 0

        # Pick the half trials that would be 'different'

        diffTrials = random.sample( range( totalNum ), int( totalNum/2 ) )
        print ['tot=', totalNum, 'diff=', diffTrials ]

        diffTag = [0 for i in range( totalNum ) ]
        for i in range( len(diffTrials) ):
            diffTag[ diffTrials[i] ] = 1 # indicate that this trial is 'diff' one
        print diffTag

        # Stimuli display (a rectangular space) information
        rowSize = 500
        colSize = 800
        rectSize = [ colSize, rowSize ] # the area of displaying bars
        barPosition = [ [0,0] for i in range(5) ] # initialize
        print barPosition
        print barPosition[1]

        # Compute the possible location slots, making sure the bars are inside of the boundary of display
        rowPad = rowSize%barLen
        if rowPad==0:
            rowPad = barLen
        colPad = colSize%barLen
        if colPad==0:
            colPad = barLen
        #print rowPad, colPad

        # The possible locations of bars
        nRows = int( (rowSize-rowPad)/barLen )
        nCols = int( (colSize-colPad)/barLen )
        #print nRows, nCols


        # Randomize Orientation and Color
        fcolor = ['red', 'blue', 'purple', 'yellow', 'green', 'black', 'white'] #--Standard color Values.
        forient = [0, 90, 45, -45] #--Standard orientation Values.

        wb = load_workbook( filename = 'stimuliList.xlsx' )
        ws = wb.get_sheet_by_name( 'Sheet1' )
        # Write header
        ws.cell( row=0, column=0 ).value = 'sOri1'
        ws.cell( row=0, column=1 ).value = 'sCol1'

        #tOri1	tCol1	sOri2	sCol2	tOri2	tCol2	sOri3	sCol3	tOri3	tCol3	sOri4	sCol4	tOri4	tCol4	sOri5	sCol5	tOri5	tCol5	changed	corrAns	lineChanged


        for r in range( totalNum ):
            print 'Trial ----',r,'----'
            # Pick colors for the bars
            randomColors = random.sample( fcolor, setSize+1 ) # the last one is used to make a different color bar
            # Fill the colors
            sColors = randomColors[0:setSize] # sample array color
            tColors = randomColors[0:setSize] # test array colors

            if diffTag[r] == 1: # if this is the trial of 'different'
                diffCol = randomColors[ setSize ]

                # Pick one of the sets
                id = random.choice( range(setSize) )
                print 'change ', id+1, ' to ', diffCol
                # Change the one color in test_array
                tColors[ id ] = diffCol # the last color picked
                #print sColors, tColors



            # Pick orientations for the bars
            sOris = []
            tOris = []
            for i in range( setSize ):
                randomOri = random.choice( forient )
                sOris.append( randomOri ) # sample array orientations
                tOris.append( randomOri )


            # Write the stimuli setting to the excel file

            # initial color/orientation for all five bars to creat polygons,
            # which are geneated all five in the beggining,
            # later setSize of bars are tested though.
            for i in range( 10 ):
                ws.cell( row=r+1, column = 2*i ).value = 360 # initial orientation
                ws.cell( row=r+1, column = 2*i+1 ).value = 'black' # initial color

            for i in range( setSize ):
                ws.cell( row=r+1, column = 0 + 4*i ).value = sOris[i]
                ws.cell( row=r+1, column = 1 + 4*i ).value = sColors[i]
                ws.cell( row=r+1, column = 2 + 4*i ).value = tOris[i]
                ws.cell( row=r+1, column = 3 + 4*i ).value = tColors[i]

            if diffTag[r] == 1:
                ws.cell( row=r+1, column=20 ).value = 'Yes'
                ws.cell( row=r+1, column=21 ).value = 'd'
                ws.cell( row=r+1, column=22 ).value = id
            else:
                ws.cell( row=r+1, column=20 ).value = 'No'
                ws.cell( row=r+1, column=21 ).value = 's'
                ws.cell( row=r+1, column=22 ).value = '-'


        # Save the parameters into .xls
        wb.save( 'stimuliList.xlsx' )

        # Decide the location of edges
  Routine R_delay
    TextComponent text_delay
      stopVal [duration (s)] = $blankDelay/1000
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine R_end
    TextComponent text_forcefinish
      text = Press ESC to exit.
      stopVal [duration (s)] = 10
      startVal [condition] = $trialNum!=0
      letterHeight = 0.1
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  Routine R_preprocess
    CodeComponent code_preprocess
Flow
  Routine R_instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuliList.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'changed': u'No', u'corrAns': u's', u'ort5': 45, u'ort4': 0, u'ort3': 90, u'ort2': -45, u'ort1': 45, u'tcol3': u'green', u'tcol2': u'purple', u'tcol1': u'red', u'tcol5': u'yellow', u'tcol4': u'white', u'col4': u'white', u'col5': u'yellow', u'col2': u'purple', u'col3': u'green', u'col1': u'red', u'lineChanged': u'-', u'tort2': -45, u'tort3': 90, u'tort1': 45, u'tort4': 0, u'tort5': 45},
      {u'changed': u'Yes', u'corrAns': u'd', u'ort5': -45, u'ort4': 0, u'ort3': 90, u'ort2': 45, u'ort1': -45, u'tcol3': u'yellow', u'tcol2': u'white', u'tcol1': u'purple', u'tcol5': u'black', u'tcol4': u'green', u'col4': u'green', u'col5': u'black', u'col2': u'white', u'col3': u'yellow', u'col1': u'red', u'lineChanged': 1, u'tort2': 45, u'tort3': 90, u'tort1': -45, u'tort4': 0, u'tort5': -45},
      {u'changed': u'Yes', u'corrAns': u'd', u'ort5': 45, u'ort4': -45, u'ort3': 0, u'ort2': 90, u'ort1': 90, u'tcol3': u'white', u'tcol2': u'green', u'tcol1': u'purple', u'tcol5': u'black', u'tcol4': u'blue', u'col4': u'blue', u'col5': u'black', u'col2': u'green', u'col3': u'red', u'col1': u'purple', u'lineChanged': 5, u'tort2': 90, u'tort3': 0, u'tort1': 90, u'tort4': -45, u'tort5': 45},
      {u'changed': u'Yes', u'corrAns': u'd', u'ort5': 0, u'ort4': 45, u'ort3': 90, u'ort2': -45, u'ort1': 0, u'tcol3': u'yellow', u'tcol2': u'purple', u'tcol1': u'green', u'tcol5': u'blue', u'tcol4': u'red', u'col4': u'red', u'col5': u'black', u'col2': u'purple', u'col3': u'yellow', u'col1': u'green', u'lineChanged': 9, u'tort2': -45, u'tort3': 90, u'tort1': 0, u'tort4': 45, u'tort5': 0}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
    Routine R_sample
    Routine R_delay
    Routine R_test
    Routine R_response
    Routine R_feedback
    Routine R_pause
  LoopTerminator trials
